CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:54
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>.*)male_6month_(?P<Genotype>.*)_dapi_Plzf.488_Dazl.568_Sox9.647_(?P<Section>.*)_C(?P<Channel>.*)\.
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'PLZF': u'Sample', u'Tubules': u'Sample', u'SOX9': u'Sample', u'DNA': u'Sample', u'DAZL': u'Sample'}, {u'PLZF': u'Genotype', u'Tubules': u'Genotype', u'SOX9': u'Genotype', u'DNA': u'Genotype', u'DAZL': u'Genotype'}, {u'PLZF': u'Section', u'Tubules': u'Section', u'SOX9': u'Section', u'DNA': u'Section', u'DAZL': u'Section'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "488")
    Name to assign these images:PLZF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "568")
    Name to assign these images:DAZL
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "647")
    Name to assign these images:SOX9
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "dapi")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "outline_tubules")
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    Name to assign these objects:Tubules
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['for visualization']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
    Select the input image:DNA
    Name the output image:RescaleIntensity_DNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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notes:['for visualization']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
    Select the input image:DAZL
    Name the output image:RescaleIntensity_DAZL
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:SOX9
    Name the output image:RescaleIntensity_SOX9
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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notes:['for visualization']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
    Select the input image:PLZF
    Name the output image:RescaleIntensity_PLZF
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:9|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notes:['save visualization']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
    Select the type of image to save:Image
    Select the image to save:RescaleIntensity_DNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:png
    Output file location:Default Output Folder sub-folder|rescale
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:10|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notes:['save visualization']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
    Select the type of image to save:Image
    Select the image to save:RescaleIntensity_SOX9
    Select method for constructing file names:From image filename
    Select image name for file prefix:SOX9
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:png
    Output file location:Default Output Folder sub-folder|rescale
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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notes:['save visualization']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
    Select the type of image to save:Image
    Select the image to save:RescaleIntensity_PLZF
    Select method for constructing file names:From image filename
    Select image name for file prefix:PLZF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:png
    Output file location:Default Output Folder sub-folder|rescale
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:RescaleIntensity_DAZL
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAZL
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rescale
    Saved file format:png
    Output file location:Default Output Folder sub-folder|rescale
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
Threshold:[module_num:13|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notes:['Use the mvh to seperate nuclei expressing mvh, because mvh is cytoplasmic']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
    Select the input image:RescaleIntensity_DAZL
    Name the output image:ThresholdDAZL
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.4,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

Threshold:[module_num:14|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
    Select the input image:RescaleIntensity_PLZF
    Name the output image:ThresholdPLZF
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

Threshold:[module_num:15|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
    Select the input image:RescaleIntensity_SOX9
    Name the output image:ThresholdSOX9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.4,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MedianFilter:[module_num:16|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notes:['remove salt and pepper noise. Mouse nuclei have “spotting” in the dapi stain, i.e. there are small dense foci in each nucleus. These spots are smoothed over by the median filter.']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
    Select the input image:RescaleIntensity_DNA
    Name the output image:MedianFilter_DNA
    Window:7

Threshold:[module_num:17|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
    Select the input image:MedianFilter_DNA
    Name the output image:ThresholdDNA
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:18|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notes:['']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
    Select the input image:ThresholdSOX9
    Name the primary objects to be identified:SOX9_objects
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:19|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notes:['']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
    Select the input image:ThresholdDNA
    Name the primary objects to be identified:DNA_objects
    Typical diameter of objects, in pixel units (Min,Max):16,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:ThresholdPLZF
    Name the primary objects to be identified:PLZF_objects
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.25,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:21|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
    Select the input objects:DNA_objects
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes

ExpandOrShrinkObjects:[module_num:22|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
    Select the input objects:ShrunkenNuclei
    Name the output objects:ShrunkenNuclei2
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
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
MaskObjects:[module_num:23|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
    Select objects to be masked:ShrunkenNuclei2
    Name the masked objects:ShrunkenNuclei2_noDAZLoverlap
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdDAZL
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.25
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:24|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
    Parent objects:ShrunkenNuclei2_noDAZLoverlap
    Child objects:DNA_objects
    Name the output object:DNA_objects_noDAZLoverlap
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ExpandOrShrinkObjects:[module_num:25|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
    Select the input objects:DNA_objects_noDAZLoverlap
    Name the output objects:DNA_objects_noDAZLoverlap_expanded
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
MaskObjects:[module_num:26|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
    Select objects to be masked:DNA_objects_noDAZLoverlap_expanded
    Name the masked objects:DNA_objects_DAZLpos
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdDAZL
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:27|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
    Select objects to measure:SOX9_objects
    Select objects to measure:PLZF_objects
    Select objects to measure:DNA_objects_DAZLpos
    Select objects to measure:Tubules
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:28|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
    Hidden:1
    Select an image to measure:ThresholdDAZL
    Select objects to measure:DNA_objects_DAZLpos

MeasureObjectIntensity:[module_num:29|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
    Hidden:1
    Select an image to measure:ThresholdSOX9
    Select objects to measure:SOX9_objects

FilterObjects:[module_num:30|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
    Select the objects to filter:DNA_objects_DAZLpos
    Name the output objects:DNA_objects_DAZLpos_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:Yes
    Maximum value:1.2
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:18
    Filter using a maximum measurement value?:Yes
    Maximum value:60
    Select the measurement to filter by:Intensity_MeanIntensityEdge_ThresholdDAZL
    Filter using a minimum measurement value?:Yes
    Minimum value:0.4
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:31|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
    Select the objects to filter:PLZF_objects
    Name the output objects:PLZF_objects_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:800

FilterObjects:[module_num:32|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
    Select the objects to filter:SOX9_objects
    Name the output objects:SOX9_objects_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:1200
    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdSOX9
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:33|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
    Hidden:1
    Select an image to measure:ThresholdSOX9
    Select objects to measure:SOX9_objects_filtered

RelateObjects:[module_num:34|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notes:['connect the nuclei found to the tubule objects that were annotated.']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
    Parent objects:Tubules
    Child objects:PLZF_objects_filtered
    Name the output object:PLZF_in_tubules
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:35|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
    Parent objects:Tubules
    Child objects:DNA_objects_DAZLpos_filtered
    Name the output object:DAZL_in_tubules
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:36|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
    Parent objects:Tubules
    Child objects:SOX9_objects_filtered
    Name the output object:SOX9_in_tubules
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureObjectSizeShape:[module_num:37|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enabled:False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
    Select objects to measure:DAZL_in_tubules
    Select objects to measure:FOXC2_in_tubules
    Select objects to measure:SOX9_in_tubules
    Calculate the Zernike features?:Yes

OverlayOutlines:[module_num:38|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_DAZL
    Name the output image:DAZL_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:DNA_objects_DAZLpos_filtered
    Select outline color:#FFFA46
    Select objects to display:Tubules

DisplayDataOnImage:[module_num:39|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
    Display object or image measurements?:Object
    Select the input objects:Tubules
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:DAZL_overlay
    Text color:red
    Name the output image that has the measurements displayed:DAZL_overlay2
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:DAZL_overlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAZL
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DAZL.nuclei_DNA_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_PLZF
    Name the output image:PLZF_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:PLZF_objects_filtered
    Select outline color:#FFFA46
    Select objects to display:Tubules

DisplayDataOnImage:[module_num:42|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
    Display object or image measurements?:Object
    Select the input objects:Tubules
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:PLZF_overlay
    Text color:red
    Name the output image that has the measurements displayed:PLZF_overlay2
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:PLZF_overlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:PLZF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PLZF_DNA_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:44|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_SOX9
    Name the output image:SOX9_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:SOX9_objects_filtered
    Select outline color:#FEEF40
    Select objects to display:Tubules

DisplayDataOnImage:[module_num:45|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
    Display object or image measurements?:Object
    Select the input objects:Tubules
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:SOX9_overlay
    Text color:red
    Name the output image that has the measurements displayed:SOX9_overlay2
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:SOX9_overlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:SOX9
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SOX9_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:47|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_SOX9
    Name the output image:SOX9notfiltered_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:SOX9_objects
    Select outline color:#FEEF40
    Select objects to display:Tubules

SaveImages:[module_num:48|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
    Select the type of image to save:Image
    Select the image to save:SOX9notfiltered_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:SOX9
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SOX9notfiltered_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:49|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_DNA
    Name the output image:PLZF_overlay_DNA
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:PLZF_objects_filtered
    Select outline color:#FFF329
    Select objects to display:Tubules

SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:PLZF_overlay_DNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:SOX9
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PLZF_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:51|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_DNA
    Name the output image:DNA_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:DNA_objects
    Select outline color:Green
    Select objects to display:PLZF_objects_filtered
    Select outline color:blue
    Select objects to display:SOX9_objects_filtered
    Select outline color:Yellow
    Select objects to display:Tubules

DisplayDataOnImage:[module_num:52|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
    Display object or image measurements?:Object
    Select the input objects:Tubules
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:DNA_overlay
    Text color:red
    Name the output image that has the measurements displayed:DNA_overlay2
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:DNA_overlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DNA_PLZF_SOX9_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:54|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Tubules|Number_Object_Number,Tubules|Location_Center_Y,Tubules|Location_Center_X,Tubules|AreaShape_Perimeter,Tubules|AreaShape_FormFactor,Tubules|AreaShape_MeanRadius,Tubules|AreaShape_Orientation,Tubules|AreaShape_Area,Tubules|AreaShape_MinFeretDiameter,Tubules|AreaShape_Solidity,Tubules|AreaShape_MaxFeretDiameter,Tubules|AreaShape_EulerNumber,Tubules|AreaShape_MedianRadius,Tubules|AreaShape_Compactness,Tubules|AreaShape_MinorAxisLength,Tubules|AreaShape_Eccentricity,Tubules|AreaShape_MaximumRadius,Tubules|AreaShape_Extent,Tubules|AreaShape_MajorAxisLength,Tubules|AreaShape_Center_Y,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:analysis_
    Overwrite existing files without warning?:Yes
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