CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['The input for this module should be the red/blue (and optionally green) layer of outlines exported from GIMP (without the raw image present - this is crucial to not get funky results! It would be nice if CP read .xcf files directly but it does not).']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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notes:['We don’t need metadata for the pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Here we load the outline images and name them “Annotation”.']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Annotation
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['We do not need grouping for this pipeline.']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the annotation image (which has red outlines around tubules and blue pixels in background regions, and optionally green commentary) into separate colors.']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
    Select the input image:Annotation
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:BlueBackgroundPixels
    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:OriginalBoundaries
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
ConvertImageToObjects:[module_num:6|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notes:['Turn the red outlines into objects ']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
    Select the input image:OriginalBoundaries
    Name the output object:Objects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertObjectsToImage:[module_num:7|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notes:['For visualization purposes we turn the TinySurroundedObjects into an image, which we will then save to the hard drive for later examination.']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
    Select the input objects:Objects
    Name the output image:LabelImage
    Select the color format:Grayscale
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
SaveImages:[module_num:8|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notes:['Saving the final tubules to an image, for examination if desired.']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
    Select the type of image to save:Image
    Select the image to save:LabelImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Annotation
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tubules
    Saved file format:tiff
    Output file location:Default Output Folder|label_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:9|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notes:['You might find it helpful to look at the object count for the different steps of analysis to discern if there are any problems.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:objects_from_outlines_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
